# PATIENT INITIALIZATION

#patient virtual container
/gate/cylindricalPET/daughters/name		patient_box
/gate/cylindricalPET/daughters/insert 		box
/gate/patient_box/setMaterial 			Air
/gate/patient_box/geometry/setXLength		360. mm
/gate/patient_box/geometry/setYLength		290. mm
/gate/patient_box/geometry/setZLength		310. mm

# patient
/gate/patient_box/daughters/name		patient
/gate/patient_box/daughters/insert		ImageNestedParametrisedVolume
/gate/geometry/setMaterialDatabase              patient-HUmaterials.db
/gate/patient/geometry/setHUToMaterialFile      patient-HU2mat.txt
/gate/patient/geometry/setImage                 ../CT_data/G3P028E0_CT_crop.mhd

/gate/patient/geometry/TranslateTheImageAtThisIsoCenter -0.7 -248.1 -642.3 mm
